PsychoPy2experiment version="2023.1.2"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': '(leave blank)'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['loops_spec/belief_bias.csv', 'loops_spec/task_order.csv', 'loops_spec/condition_spec.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[1.0, 1.0, 1.0]
  expName = scd_experiment
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent text_welcome
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $msg_welcome
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    KeyboardComponent key_welcome
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine investment_task
    CodeComponent code_score_counter_invest
      Code Type = Both
      Begin JS Routine:
        msg_score_counter = ((whose + " total score: ") + total_score.toString());
      Begin Routine:
        msg_score_counter = whose + " total score: " + str(total_score)
    TextComponent score_counter_invest
      color = crimson
      letterHeight = 0.04
      pos = (0.6, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_score_counter
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    TextComponent text_invest
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have a chance of 2/3 (67%) to lose the amount you bet and a chance of 1/3(33%)  to win 2.5 times the amount you bet.

        Please indicate how much you want to bet by clicking on the slider below? (Maximum 100 points)
    SliderComponent slider_invest
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = False
      granularity = 1
      labels = '0', '10', '20', '30', '40', '50', '60', '70', '80', '90', '100'
      letterHeight = 0.04
      pos = (0, -0.2)
      size = (1.0, 0.04)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (5, 10, 15, 20, 25, 30, 35, 40, 45, 50, 55, 60, 65, 70, 75, 80, 85, 90, 95, 100, 105)
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    TextComponent text_invest_confirm
      color = black
      letterHeight = 0.04
      pos = (-0, -0.4)
      saveStartStop = False
      startVal [condition] = slider_invest.rating
      text = (Press 'y' to confirm)
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    KeyboardComponent key_invest_confirm
      allowedKeys = 'y',
      forceEndRoutine = True
      startVal [condition] = slider_invest.rating
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  Routine belief_bias_task
    CodeComponent code_score_counter_belief_bias
      Code Type = Auto->JS
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      Begin Routine:
        msg_score_counter = whose + " total score: " + str(total_score)
    TextComponent score_counter_syllogism
      color = crimson
      letterHeight = 0.04
      pos = (0.6, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_score_counter
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    TextComponent text_syllogism
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $syllogism
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    KeyboardComponent key_syllogism
      allowedKeys = 'y', 'n'
      correctAns = $syllogism_correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine debriefing_or_farewell
    TextComponent text_debrief
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $msg_debrief + "This was done to create a sense of group membership. The experiment was about understanding group membership's impact on the performance on the experimental tasks." + "\n" + "Additionally, all of the participants received the same score for the syllogism task (360 points) regardless of the proportion of correct asnwers." + "\n" + "If you wish to revoke your consent to store and use your data in this project, please click 'escape'. Both the data on your performance and your background information will be then deleted from the dataset and won't be used in the exam."+"\n\n"+"I'm sorry for any inconvenience, and thank you for your time!" + "\n" +"Otherwise, press 'space' to continue."
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    KeyboardComponent key_debrief
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine investment_feedback
    CodeComponent code_invest_feedback
      Code Type = Both
      Begin JS Routine:
        invest_amount = (slider_invest.rating - 5);
        invest_success = randomInteger(1, 3);
        if ((invest_success === 3)) {
            round_score = (2.5 * invest_amount);
            msg_invest_feedback = (((("Congratulations! " + who) + " won ") + round_score.toString()) + ". ");
        } else {
            round_score = (- invest_amount);
            msg_invest_feedback = (((("Unfortunately the money was lost." + who) + " lost ") + (-round_score).toString()) + ". ");
        }

        total_score = (total_score + round_score);

        msg_invest_feedback = ((((((((msg_invest_feedback + "\n") + "\n") + whose) + " total score is now: ") + total_score.toString()) + ". ") + "\n\n") + "(Press 'space' to continue)");
      Begin Routine:
        # psychopy seems to have a bug: when a slider begins with a 0, I can't select it. Because of that i made the slider from 5 to 105 and now have to subtract 5 to get the real value the participant wanted to invest
        invest_amount = slider_invest.rating - 5
        invest_success = random.randint(1,3)

        if invest_success == 3:
            round_score = 2.5 * invest_amount
            msg_invest_feedback = "Congratulations! " + who + " won " + str(round_score) + ". "
        else:
            round_score = - invest_amount
            msg_invest_feedback = "Unfortunately the money was lost." + who + " lost " + str( - round_score) + ". "

        total_score = total_score + round_score

        msg_invest_feedback = msg_invest_feedback + "\n" + "\n" + whose + " total score is now: " + str(total_score) + ". " + "\n\n" + "(Press 'space' to continue)"
      End JS Routine:
        psychoJS.experiment.addData("total_score", total_score);
        psychoJS.experiment.addData("round_score", round_score);
        psychoJS.experiment.addData("invest_success", invest_success);
      End Routine:
        thisExp.addData('total_score', total_score)
        thisExp.addData('round_score', round_score)

        # just to be able to see if all worked fine while looking at the csv alone
        thisExp.addData('invest_success', invest_success)
    TextComponent text_invest_feedback
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_invest_feedback
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    KeyboardComponent key_invest_feedback
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine belief_bias_feedback
    CodeComponent code_syllogisms_feedback
      Code Type = Both
      Begin JS Routine:
        syllogisms_score = 360;
        total_score = (total_score + syllogisms_score);
        msg_belief_bias_feedback = (((((((((((("Congratulations! " + who) + " gained ") + syllogisms_score.toString()) + ". ") + "\n") + "\n") + whose) + " total score is now: ") + total_score.toString()) + ". ") + "\n\n") + "(Press 'space' to continue)");
      Begin Routine:
        # i decided to set the score for the syllogism task constant to reduce the influence of individual performance on subsequent tasks
        syllogisms_score = 360
        total_score = total_score + syllogisms_score

        msg_belief_bias_feedback = "Congratulations! " + who + " gained " + str(syllogisms_score)+ ". " + "\n" + "\n" + whose + " total score is now: " + str(total_score) + ". " + "\n\n" + "(Press 'space' to continue)"
      End JS Routine:
        psychoJS.experiment.addData("total_score", total_score);
    TextComponent text_syllogism_feedback
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_belief_bias_feedback
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    KeyboardComponent key_syllogism_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent
    CodeComponent code_begin
      Code Type = Both
      Before Experiment:
        import random

        cond_id = random.randint(0,1)

        if cond_id == 0:
            who = "You"
            whose = "Your"
        elif cond_id == 1:
            who = "Your group"
            whose = "Your group's"

        cond_id = str(cond_id)

        total_score = 1054



        def marbles(n_marbles = 20, n_black = 2, n_row = 10, total_width = 6, position_x = 0, position_y = 0, spacing = 0.1):

            radius = (total_width - n_row * 0.1) / n_row
            fills = np.array(["black", "white"])
            fills = np.repeat(fills, [n_black, n_marbles - n_black], axis=0)
            random.shuffle(fills)

            position_x = [position_x + (2*radius + spacing)*i for i in range(0, n_row)] * int(n_marbles / n_row)
            position_y = [position_y + (2*radius + spacing) * (i // n_row) for i in range(0, n_marbles)]
            circles = []
            for i in range(0, n_marbles):
                circle = visual.ShapeStim(
                    win=win,
                    name='circle',
                    units='deg',
                    size=(radius, radius),
                    vertices='circle',
                    ori=0.0,
                    pos=(positions_x[i], positions_y[i]),
                    anchor='center',
                    lineWidth=1.0,
                    colorSpace='rgb',
                    lineColor='black',
                    fillColor=fills[i],
                    opacity=None,
                    depth=-1.0,
                    interpolate=True
                    )
                circles.append(circle)
            return circles
      Before JS Experiment:
        // defining a function useful in the investment / lottery task
        function randomInteger(min, max) {
          return Math.floor(Math.random() * (max - min + 1)) + min;
        }

        // defining a function for the ratio bias task
        function marbles(n_marbles = 20, n_red = 2, n_row = 10, total_width = 6, position_x = 0, position_y = 0, spacing = 0.01) {
            radius = (total_width - n_row * spacing) / (n_row * 2);
            n_white = Math.round((n_marbles - n_red));
            red = new Array(n_red).fill("red");
            white = new Array(n_white).fill("white");
            fills = red.concat(white);
            util.shuffle(fills);

            positions_x_row = [ ];
            for (let i = 0; i < n_row; i++) {
              positions_x_row = positions_x_row.concat(position_x);
              position_x = position_x + 2*radius + spacing;
              position_x = Math.round(position_x*1000)/1000;
        }
            positions_x = new Array(n_marbles / n_row).fill(positions_x_row).flat();


            positions_y = [ ];
            var i_y; //curent value(for each marble) of y
            for (let i = 0; i < n_marbles; i++) {
                i_y = position_y - (2*radius + spacing) * Math.floor(i / n_row);
                positions_y = positions_y.concat(i_y);
        }

            circles = [ ];
            var circle;
            for (let i = 0; i < n_marbles; i++) {
            circle = new visual.Polygon({
                win: psychoJS.window,
                name: 'circle',
                units : 'height',
                edges: 100,
                size:[2*radius, 2*radius],
                ori: 0.0,
                pos: [positions_x[i], positions_y[i]],
                anchor: 'center',
                lineWidth: 1.0,
                colorSpace: 'rgb',
                lineColor: new util.Color('black'),
                fillColor: new util.Color(fills[i]),
                opacity: undefined,
                depth: -1,
                interpolate: true,
            });

            circles = circles.concat(circle);
            }

            return circles;
        }


        // I need to declare these here bc otherwise it bugs
        position_x_large = 0;
        position_x_small = 0;
      Begin Experiment:
        participantN = '0'
      Begin JS Experiment:
        // just keeping a participant counter to see how the counterbalancing works, and why not
        // increase the value on the shelf by 1
        psychoJS.shelf.addIntegerValue({key: ['participant_counter'], delta: 1})
        // fetch the current value on the shelf
        participantN = await psychoJS.shelf.getIntegerValue({key: ['participant_counter'], defaultVlaue: 0})
        // https://www.psychopy.org/online/shelf.html#interacting-with-integer-records

        psychoJS.experiment.addData("participant_counter", participantN);

        // draw a condition randomly using pavlovia shelf feature
        counterbal = await psychoJS.shelf.counterBalanceSelect({key: ['soc_cul_conditions']})
        cond_id = counterbal.group;


        msg_welcome_individual = `Welcome to the experiment!

        Your initial score is 1054 points.
        In a minute, you'll be asked to perform different tasks. The goal is to get as many points as possible.

        If, at any point, you need to leave the experiment before it's finished, press the 'escape' key. Be aware that your data will be removed if you do that.
        Otherwise, press 'space' to move forward.

        Good luck!`;



        msg_welcome_group = `Welcome to the experiment!

        You have been randomly assigned to group number 4 and are now this group's 3rd and last member.
        Members of your group have collectively gathered 1054 points. This is your current group score.
        In a minute, you'll be asked to perform different tasks. The goal is to get as many points for your team as possible.

        If, at any point, you need to leave the experiment before it's finished, press the 'escape' key. Be aware that your data will be removed if you do that.

        Otherwise, press 'space' to move forward.

        Good luck!`;



        msg_invest_instructions_individual = `This part of the experiement consists of 3 succesive rounds. In each round you will start with your current total score. You must decide how many points (but maximally 100 points) you wish to take out of your current score and bet in the following lottery:

        You have a chance of 2/3 (67%) to lose the amount you bet and a chance of 1/3 (33%) to win 2.5 times the amount you bet.

        (Press 'space' to move to the first round)`;



        msg_invest_instructions_group = `This part of the experiement consists of 3 succesive rounds (for each group member, so 9 in total for your entire group). In each round you will start with your current total score. You must decide how many points (but maximally 100 points) you wish to take out of your current score and bet in the following lottery:

        You have a chance of 2/3 (67%) to lose the amount you bet and a chance of 1/3 (33%) to win 2.5 times the amount you bet.

        (Press 'space' to move to the first round)`;




        msg_debrief_group = "Before we finish, I need to inform you about the deception used in this experiment. At the beginning of the experiment, you were told you had been assigned to a group, and that your initial score was a result of the performance of other group members. This group was not real, and the intial score was set in advance by the experimenter, regardless of anyone else's real performance.";
        msg_debrief_individual = "Before we finish, I need to inform you about the deception used in this experiment. While you solved the tasks as an individual, some people were told they have been assigned to a group, and that their initial score was a result of other people performance. This group was not real, and the intial score was set in advance, regardless of anyone else real performance.";




        if (cond_id == '0') {
            who = "You";
            whose = "Your";
            sss = "";
            msg_welcome = msg_welcome_individual;
            msg_invest_instructions = msg_invest_instructions_individual;
            msg_debrief = msg_debrief_individual;
        } else {
            if (cond_id == '1') {
                who = "Your group";
                whose = "Your group's";
                sss = "s";
                msg_welcome = msg_welcome_group;
                msg_invest_instructions = msg_invest_instructions_group;
                msg_debrief = msg_debrief_group;
            }
        }

        msg_win_belief_bias_instructions = "In this task, you will be presented with different trays of red and white marbles. Each round one marble is drawn at random from one of the trays (imagine the marbles are mixed up and you are to pick one without looking). If the marble you draw is red " + who.toLowerCase() + " WIN" + sss.toUpperCase() + " 100 points. Your task is to choose which tray you want to draw from." + "\n\n" + "(Press 'space' to continue)";
        msg_lose_belief_bias_instructions = "In this task, you will be presented with different trays of red and white marbles. Each round one marble is drawn at random from one of the trays (imagine the marbles are mixed up and you are to pick one without looking). If the marble you draw is red " + who.toLowerCase() + " LOSE" + sss.toUpperCase() + " 100 points. Your task is to choose which tray you want to draw from." + "\n\n" + "(Press 'space' to continue)";



        total_score = 1054;

        psychoJS.experiment.addData("who", who);
    TextComponent text_consent
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Hi!
        You are about to take part in an experiment I made as a part of an exam at my Bachelor's programme. Before you decide to participate, it is important that you understand what it will involve. Please read the following information carefully, and contact me if you have any questions (email: au693018@uni.au.dk).

        To take part in this experiment you must be at least 18 years old. You will be asked to perform a few cognitive tasks and to provide some of your personal information (e.g. gender, age, education). The tasks don't seem to involve any risk beyond potential boredom or tiredness.  The collected data will be anonymised. Data collection takes place through Pavlovia.org which is GDPR compliant. I will also store a copy of the data locally on my laptop. The data will only be used to write a mock scientific research paper for a university exam. I will delete the data after having passed the course. You are welcome to withdraw your consent at any time during the experiment by clicking the 'escape' key. All collected data will be deleted in such a case, and won't be used in the exam. After the experiment is finished, but before 01.08.2023, you can still withdraw your consent to use your data, if you provide me with the exact date and time you took part in the experiment, as I won't be able to identify your data otherwise.


        Press the 'y' key if you are above 18, and you consent to take part in the experiment;
        Press the 'escape' key to leave (click 'esc' twice if you're in fullscreen mode)
    KeyboardComponent key_consent
      allowedKeys = 'y',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine bye_bye
    TextComponent text_bye_bye
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Thank you for participating once again, and have a lovely day!:)



        (Press 'space' to finish the experiment and save the data)
    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine belief_bias_instructions
    TextComponent text_instructions_belief_bias
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"You are going to receive a series of eight problems. You must decide whether the stated conclusion follows logically from the premises or not."+ "\n" +"It is important that you suppose all of the premises are true and limit yourself only to the information contained in these premises."+ "\n\n"+ whose + " score will be updated after you solve all eight problems." + "\n\n" + "(Press 'space' to continue)"
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    KeyboardComponent key_instructions_belief_bias
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine investment_instructions
    TextComponent text_invest_instructions
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $msg_invest_instructions
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    KeyboardComponent key_invest_instruction
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine remove_me_2
  Routine remove_me_3
  Routine ratio_bias_task
    CodeComponent code_ratio_bias_task
      Code Type = Both
      Begin JS Routine:
        trail_n_red = n_red_large.pop();

        tray_width = 0.45;

        // drawing which one will be on the right and which one the left
        left_or_right = [-0.8, 0.40];
        left_or_right = util.shuffle(left_or_right);
        position_x_small = left_or_right[0];
        position_x_large = left_or_right[1];

        position_x_small_caption = position_x_small + (tray_width / 2);
        position_x_large_caption = position_x_large + (tray_width / 2);

        // defining the trays
        tray_small = marbles(10,1,10,tray_width,position_x_small,0.15,0.003);
        tray_large = marbles(100,trail_n_red,10,tray_width,position_x_large,0.15,0.003);


        for (var circle, _pj_c = 0, _pj_a = tray_small, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            circle = _pj_a[_pj_c];
            circle.setAutoDraw(true);
        }
        for (var circle, _pj_c = 0, _pj_a = tray_large, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            circle = _pj_a[_pj_c];
            circle.setAutoDraw(true);
        }

        caption_large = "( " + (100 - trail_n_red).toString() + " white and " + trail_n_red.toString() + " red marbles)";

        msg_score_counter = ((whose + " total score: ") + total_score.toString());
      Begin Routine:
        circles_left = marbles(n_marbles = 20, n_black = 2, n_row = 10, total_width = 6, position_x = -9, position_y = 0, spacing = 0.1)
        circles_right = marbles(n_marbles = 20, n_black = 2, n_row = 10, total_width = 6, position_x = 6, position_y = 0, spacing = 0.1)

        for circle in circles_left:
            circle.setAutoDraw(True)

        for circle in circles_right:
            circle.setAutoDraw(True)
      End JS Routine:
        for (var circle, _pj_c = 0, _pj_a = tray_small, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            circle = _pj_a[_pj_c];
            circle.setAutoDraw(false);
        }
        for (var circle, _pj_c = 0, _pj_a = tray_large, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            circle = _pj_a[_pj_c];
            circle.setAutoDraw(false);
        }

        psychoJS.experiment.addData("position_x_large", position_x_large);
        psychoJS.experiment.addData("position_x_small", position_x_small);
        psychoJS.experiment.addData("trail_n_red", trail_n_red);
      End Routine:
        for circle in circles_left:
            circle.setAutoDraw(False)

        for circle in circles_right:
            circle.setAutoDraw(False)
    TextComponent score_counter_ratio_bias
      color = crimson
      letterHeight = 0.04
      pos = (0.6, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_score_counter
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    TextComponent text_ratio_bias
      color = black
      letterHeight = 0.04
      pos = (0, 0.34)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Press the 'f' key to choose the tray on the left.
        Press the 'j' key to choose the tray on the right.
    TextComponent caption_large_ratio_bias
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (position_x_large_caption, -0.35)
      startVal [time (s)] = 0.0
      text [set every repeat] = $caption_large
      units = height
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    TextComponent caption_small_ratio_bias
      color = black
      letterHeight = 0.03
      pos [set every repeat] = $(position_x_small_caption, -0.35)
      startVal [time (s)] = 0.0
      text = ( 9 white and 1 red marbles)
      units = height
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    KeyboardComponent resp_ratio_bias_task
      allowedKeys = 'f','j',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ratio_bias_feedback
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        let hit_large_tray;
        if (position_x_large < 0) {
            hit_large_tray = 'f';
            } else {
            hit_large_tray = 'j';
        }

        key_clicked = resp_ratio_bias_task.keys[-1];

        let chance;
        if (hit_large_tray == key_clicked) {
            chance = trial_n_black;
            } else {
                chance = 10;
        }

        marbles_draw = randomInteger(1, 100);

        //check
        console.log(marbles_draw);

        let msg_feedback_ratio_bias;
        if (marbles_draw <= chance) {
            if (win_frame == 1) {
                total_score += 100;
                msg_feedback_ratio_bias = "You have drawn a red marble!" + "\n" + who + " win" + sss + " 100 points!" + "\n" + whose + " score is now " + total_score.toString()+"." + "\n\n" + "(Press 'space' to continue)";
            }
            if (lose_frame == 1) {
                total_score += -100;
                msg_feedback_ratio_bias = "Unfortunately, you have drawn a red marble." + "\n" + who + ' lose' + sss + " 100 points." + "\n" + whose + " score is now " + total_score.toString()+"." + "\n\n" + "(Press 'space' to continue)";
            }
        }
        if (marbles_draw > chance) {
                msg_feedback_ratio_bias = "You have drawn a white marble. Nothing happens." + "\n" + whose + " score is " + total_score.toString()+"." + "\n\n" + "(Press 'space' to continue)";
        }
      End JS Routine:
        psychoJS.experiment.addData("marbles_draw", marbles_draw);
        psychoJS.experiment.addData("total_score", total_score);
    TextComponent text_ratio_bias_feedback
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_feedback_ratio_bias
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    KeyboardComponent key_ratio_bias_feedback
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ratio_bias_instructions_positive
    CodeComponent code
      Code Type = Both
      End JS Routine:
        n_red_large = [10,9,8,7,6,5];
        n_red_large = util.shuffle(n_red_large);

        // for testing the code:  n_red_large = new Array(10).fill([10,9,8,7,6,5]).flat();


        msg_lose_belief_bias_instructions = `For the next rounds, you will be asked to perform the same task (to chose a tray of marbles to draw from). This time however, drawing a red marble will mean LOSING 100 points instead of gaining them.
        Good luck!

        (Press 'space' to continue)`;
    TextComponent text_ratio_bias_instructions
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_win_belief_bias_instructions
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    KeyboardComponent key_ratio_bias_instructions
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ratio_bias_instructions_negative
    CodeComponent code_2
      Code Type = Both
      End JS Routine:
        n_red_large = [10,9,8,7,6,5];
        n_red_large = util.shuffle(n_red_large);



        msg_win_belief_bias_instructions = `For the next rounds, you will be asked to perform the same task (to chose a tray of marbles to draw from). This time however, drawing a red marble will mean WINNING 100 points instead of losing them.
        Good luck!

        (Press 'space' to continue)`;
    TextComponent text_ratio_bias_instructions_lose
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_lose_belief_bias_instructions
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    KeyboardComponent key_ratio_bias_instructions_lose
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  PavloviaSurveyRoutine feedback
    surveyId = 0f39242f-2312-451c-b7ca-14536cb886bd
    surveyType = id
  PavloviaSurveyRoutine survey_demographics
    surveyId = afe5bbb0-9f7b-409a-a5b5-f8f9dfcaa894
    surveyType = id
Flow
  Routine consent
  Routine welcome
  LoopInitiator loop_randomise_task_order loopType="TrialHandler"
    conditionsFile = loops_spec/task_order.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('task1', 1), ('task2', 0), ('task3', 0)]),
      OrderedDict([('task1', 0), ('task2', 1), ('task3', 0)]),
      OrderedDict([('task1', 0), ('task2', 0), ('task3', 1)])]
    LoopInitiator loop_randomise_ratio_bias loopType="TrialHandler"
      conditionsFile = loops_spec/ratio_bias_order.csv
      loopType = random
      nReps = n_ratio_bias
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      conditions:
        [OrderedDict([('win_frame', 1), ('lose_frame', 0)]),
        OrderedDict([('win_frame', 0), ('lose_frame', 1)])]
      LoopInitiator trials loopType="TrialHandler"
        loopType = random
        nReps = win_frame
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        Routine ratio_bias_instructions_positive
      LoopTerminator trials
      LoopInitiator trials_2 loopType="TrialHandler"
        loopType = random
        nReps = win_frame * 6
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        Routine ratio_bias_task
        Routine ratio_bias_feedback
      LoopTerminator trials_2
      LoopInitiator trials_3 loopType="TrialHandler"
        loopType = random
        nReps = lose_frame
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        Routine ratio_bias_instructions_negative
      LoopTerminator trials_3
      LoopInitiator loop_ratio_bias_negative loopType="TrialHandler"
        loopType = random
        nReps = lose_frame * 6
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        Routine ratio_bias_task
        Routine ratio_bias_feedback
      LoopTerminator loop_ratio_bias_negative
    LoopTerminator loop_randomise_ratio_bias
    LoopInitiator loop_invest_instructions loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = n_invest_task
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      Routine investment_instructions
    LoopTerminator loop_invest_instructions
    LoopInitiator loop_investment loopType="TrialHandler"
      loopType = random
      nReps = n_invest_task * 3
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      Routine investment_task
      Routine investment_feedback
    LoopTerminator loop_investment
    LoopInitiator loop_beleif_bias_instructions loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = n_belief_bias
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      Routine belief_bias_instructions
    LoopTerminator loop_beleif_bias_instructions
    LoopInitiator loop_belief_bias loopType="TrialHandler"
      conditionsFile = loops_spec/belief_bias.csv
      loopType = random
      nReps = n_belief_bias
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      conditions:
        [OrderedDict([('syllogism', "Premise 1: All things that are smoked are good for the health.\nPremise 2: Cigarettes are smoked.\nConclusion: Cigarettes are good for the health.\n\nDoes the conclusion follow from the premises?\n\n \n (To answer 'yes' - press the 'y' key \n To answer 'no' - press the 'n' key)"), ('syllogism_correct_ans', 'y')]),
        OrderedDict([('syllogism', "Premise 1: All unemployed people are poor.\nPremise 2: Rockefeller is not unemployed.\nConclusion: Rockefeller is not poor.\n\nDoes the conclusion follow from the premises?\n\n \n (To answer 'yes' - press the 'y' key \n To answer 'no' - press the 'n' key)"), ('syllogism_correct_ans', 'y')]),
        OrderedDict([('syllogism', "Premise 1: All flowers have petals.\nPremise 2: Roses have petals.\nConclusion: Roses are flowers.\n\nDoes the conclusion follow from the premises?\n\n \n (To answer 'yes' - press the 'y' key \n To answer 'no' - press the 'n' key)"), ('syllogism_correct_ans', 'y')]),
        OrderedDict([('syllogism', "Premise 1: All animals with four legs are dangerous.\nPremise 2: Poodles are not dangerous.\nConclusion: Poodles do not have four legs.\n\nDoes the conclusion follow from the premises?\n\n \n (To answer 'yes' - press the 'y' key \n To answer 'no' - press the 'n' key)"), ('syllogism_correct_ans', 'y')])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
      Routine belief_bias_task
    LoopTerminator loop_belief_bias
    LoopInitiator loop_belief_bias_feedback loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = n_belief_bias
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      Routine belief_bias_feedback
    LoopTerminator loop_belief_bias_feedback
  LoopTerminator loop_randomise_task_order
  PavloviaSurveyRoutine survey_demographics
  Routine debriefing_or_farewell
  PavloviaSurveyRoutine feedback
  Routine bye_bye
